# Instrument driver configuration file.
[General settings]

# The name is shown in all the configuration windows
name: PXI Aeroflex 303x Digitizer TA Lumi

# The version string should be updated whenever changes are made to this config file
version: 0.0.1

# Name of folder containing the code defining a custom driver. 
driver_path: PXI_Aeroflex303x_TA_Lumi

# General VISA settings for the instrument.
[VISA settings]

# Disable communication over the VISA protocol
use_visa = False


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
[RF Frequency]
name: RF Frequency
unit: Hz
datatype: DOUBLE
def_value: 4.466E9
group: Mixer config

[Max input level]
name: Max input level
unit: dBm
datatype: DOUBLE
def_value: -1.38
group: Mixer config

[Sampling rate]
name: Sampling rate
unit: Hz
datatype: DOUBLE
def_value: 250E6
group: Digitizer config

[Number of samples]
name: Number of samples
datatype: DOUBLE
def_value: 750
group: Digitizer config

[Total number of samples]
name: Total number of samples
datatype: DOUBLE
def_value: 200
group: Digitizer config

[Sampling time]
name: Sampling time
datatype: DOUBLE
def_value: 200
group: Digitizer config

[Buffer read]
name: Buffer read
datatype: BOOLEAN
def_value: True
group: Digitizer config

[Remove DC offset]
name: Remove DC offset
datatype: BOOLEAN
def_value: True
group: Digitizer config

[Set IQ Bandwidth manually]
name: Set IQ Bandwidth manually
datatype: BOOLEAN
def_value: False
group: Digitizer config

[IQ Bandwidth]
name: IQ Bandwidth
unit: Hz
datatype: DOUBLE
def_value: 1E3
group: Digitizer config
state_quant: Set IQ Bandwidth manually
state_value_1: True

[Bandwidth above or below]
name: Bandwidth above or below
datatype: COMBO
def_value: Below
combo_def_1: Above
combo_def_2: Below
group: Digitizer config
state_quant: Set IQ Bandwidth manually
state_value_1: True


[Trigger Source]
name: Trigger Source
datatype: COMBO
def_value: FRONT_SMB
combo_def_1: PXI_TRIG_0
combo_def_2: PXI_TRIG_1
combo_def_3: PXI_TRIG_2
combo_def_4: PXI_TRIG_3
combo_def_5: PXI_TRIG_4
combo_def_6: PXI_TRIG_5
combo_def_7: PXI_TRIG_6
combo_def_8: PXI_TRIG_7
combo_def_9: PXI_STAR
combo_def_10: PXI_LBL_0
combo_def_11: PXI_LBL_1
combo_def_12: PXI_LBL_2
combo_def_13: PXI_LBL_3
combo_def_14: PXI_LBL_4
combo_def_15: PXI_LBL_5
combo_def_16: PXI_LBL_6
combo_def_17: PXI_LBL_7
combo_def_18: PXI_LBL_8
combo_def_19: PXI_LBL_9
combo_def_20: PXI_LBL_10
combo_def_21: PXI_LBL_11
combo_def_22: PXI_LBL_12
combo_def_23: LVDS_MARKER_0
combo_def_24: LVDS_MARKER_1 
combo_def_25: LVDS_MARKER_2
combo_def_26: LVDS_MARKER_3
combo_def_27: LVDS_AUX_0
combo_def_28: LVDS_AUX_1
combo_def_29: LVDS_AUX_2
combo_def_30: LVDS_AUX_3
combo_def_31: LVDS_AUX_4
combo_def_32: LVDS_SPARE_0
combo_def_33: SW_TRIG
combo_def_34: LVDS_MARKER_4
combo_def_35: INT_TIMER
combo_def_36: INT_TRIG
combo_def_37: FRONT_SMB
group: Trigger config

[Number of pretrigger samples]
name: Number of pretrigger samples
datatype: DOUBLE
def_value: 100
group: Trigger config

[Averages per trigger]
name: Averages per trigger
datatype: DOUBLE
def_value: 100
group: Trigger config

[Number of triggers]
name: Number of triggers
datatype: DOUBLE
def_value: 100
group: Trigger config

[Timeout]
name: Timeout
datatype: DOUBLE
def_value: 10000
group: Trigger config

[Trace]
name: Trace
x_name: Time
x_unit: s
unit: V
datatype: VECTOR_COMPLEX
permission: READ
group: Measured signals

[LC Trace]
name: LC Trace
x_name: Time
x_unit: s
unit: V
datatype: VECTOR_COMPLEX
permission: READ
group: Measured signals

[Level correction]
name: Level correction
unit: dBm
datatype: DOUBLE
permission: READ
group: Measured signals

[Local oscillator VISA]
name: Local oscillator VISA
datatype: STRING
def_value: 3011D1
permission: NONE
group: Mixer config

[LO Reference Mode]
name: LO Reference Mode
datatype: COMBO
def_value: OXCO
combo_def_1: OXCO
combo_def_2: Internal
combo_def_3: Ext Daisy
combo_def_4: Ext Terminated
group: Mixer config

[LO Above or Below]
name: LO Above or Below
datatype: COMBO
def_value: Below
combo_def_1: Below
combo_def_2: Above
group: Mixer config




[Cut out part of the trace]
name: Cut out part of the trace
datatype: BOOLEAN
def_value: False
group: Digitizer config

[Start Sample]
name: Start Sample
datatype: DOUBLE
def_value: 1
group: Digitizer config
state_quant: Cut out part of the trace
state_value_1: True

[Stop Sample]
name: Stop Sample
datatype: DOUBLE
def_value: 1E9
group: Digitizer config
state_quant: Cut out part of the trace
state_value_1: True



#[Trigger polarity]
#name: Trigger polarity
#datatype: COMBO
#def_value: Positive
#combo_def_1: Positive
#combo_def_2: Negative
#group: Trigger config
#state_quant: Trigger Source
#state_value_1: FRONT_SMB
#
#[Trigger type]
#name: Trigger type
#datatype: COMBO
#def_value: Edge
#combo_def_1: Edge
#combo_def_2: Gate
#group: Trigger config
#state_quant: Trigger Source
#state_value_1: FRONT_SMB




[Power trace]
name: Power trace
x_name: Time
x_unit: s
unit: W
datatype: VECTOR
permission: READ
group: Measured signals

[AvgTrace]
name: AvgTrace
unit: V
datatype: COMPLEX
permission: READ
group: Measured signals


[AvgPower]
name: AvgPower
unit: W
datatype: DOUBLE
permission: READ
group: Measured signals

#Only return raw data if needed, could be a big vector if many triggers and samples
[Retrieve raw data]
name: Retrieve raw data
datatype: BOOLEAN
def_value: False
group: Digitizer config

[Raw data]
name: Raw data
unit: V
datatype: VECTOR_COMPLEX
permission: READ
group: Measured signals


[Collect IQ Histogram]
name: Collect IQ Histogram
datatype: BOOLEAN
def_value: False
group: Measured signals

# This value should only be visible if Collect Histograms is true
[Histogram bin number]
name: Histogram bin number
datatype: DOUBLE
def_value: 10
permission: BOTH
group: Measured signals
state_quant: Collect IQ Histogram
state_value_1: True

[Histogram path]
name: Histogram path
datatype: STRING
def_value: C:\
permission: BOTH
group: Measured signals
state_quant: Collect IQ Histogram
state_value_1: True



[Power mean unaveraged]
name: Power mean unaveraged
unit: Watt
datatype: VECTOR
permission: READ
group: Measured signals

[Voltage mean unaveraged]
name: Voltage mean unaveraged
unit: V
datatype: VECTOR_COMPLEX
permission: READ
group: Measured signals